<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:imvizui="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers.Design"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.CuttlefishFip;assembly=AllenNeuralDynamics.CuttlefishFip"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Visualizer">
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:Defer">
              <Name>RoiManager</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="imvizui:ImGuiVisualizerBuilder">
                    <imvizui:Name>Visualization</imvizui:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>frames</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>frames</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ParsedFipStreams</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ExperimentState</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Enabled" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentRoiSettings</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="RoiSettings" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LocalRoiDefaultPath</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocalRoiDefaultPath" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:RoiManagerVisualizer">
                      <p1:Visible>true</p1:Visible>
                      <p1:Enabled>true</p1:Enabled>
                      <p1:FontSize>20</p1:FontSize>
                      <p1:LocalRoiDefaultPath>../local/default.json</p1:LocalRoiDefaultPath>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentRoiSettings</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="12" Label="Source1" />
                  <Edge From="4" To="12" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="12" Label="Source3" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="12" Label="Source4" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source5" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Visualization</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="rx:Defer">
              <Name>LaserCalibration</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="imvizui:ImGuiVisualizerBuilder" />
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>frame</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>frame</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CalibratedLasers</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LightSources" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggerTask</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="State" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ExperimentState</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Enabled" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:FipCameraPowerControlVisualizer">
                      <p1:Visible>true</p1:Visible>
                      <p1:FontSize>20</p1:FontSize>
                      <p1:Enabled>true</p1:Enabled>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TriggerTask</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p2:CreateSetTaskStatePayload,p2:TaskState">
                    <MemberName>SetTaskState</MemberName>
                    <Value>Start</Value>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SetTaskState</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="11" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="11" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="11" Label="Source3" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source4" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="rx:Defer">
              <Name>LauncherControl</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ExperimentState</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Enabled" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>Start</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Start Experiment</gui:Text>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>StartExperimentToggleButton</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>End</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>End Experiment</gui:Text>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>EndExperimentButton</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>LauncherControl</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>2</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Annotation</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
                          <rx:Name>_ResetText</rx:Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Text" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="gui:TextBoxBuilder">
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:Text />
                          <gui:Multiline>true</gui:Multiline>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>_TextBoxText</Name>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="gui:ButtonBuilder">
                          <gui:Name>Send</gui:Name>
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:Text>Send</gui:Text>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>_SendButtonEvent</Name>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="gui:TableLayoutPanelBuilder">
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:ColumnCount>1</gui:ColumnCount>
                          <gui:RowCount>2</gui:RowCount>
                          <gui:ColumnStyles />
                          <gui:RowStyles>
                            <gui:RowStyle>
                              <gui:SizeType>Percent</gui:SizeType>
                              <gui:Height>0.8</gui:Height>
                            </gui:RowStyle>
                            <gui:RowStyle>
                              <gui:SizeType>Percent</gui:SizeType>
                              <gui:Height>0.2</gui:Height>
                            </gui:RowStyle>
                          </gui:RowStyles>
                          <gui:CellSpans />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>_SendButtonEvent</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>_TextBoxText</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="NotEqual">
                                <Operand xsi:type="StringProperty">
                                  <Value />
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>_ResetText</Name>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Annotations</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="9" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="11" To="13" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>LauncherControl</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>2</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles>
                      <gui:RowStyle>
                        <gui:SizeType>Percent</gui:SizeType>
                        <gui:Height>0.25</gui:Height>
                      </gui:RowStyle>
                      <gui:RowStyle>
                        <gui:SizeType>Percent</gui:SizeType>
                        <gui:Height>0.75</gui:Height>
                      </gui:RowStyle>
                    </gui:RowStyles>
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StartExperimentToggleButton</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>StartExperimentShortcut</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EndExperimentButton</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>EndExperiment</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StartExperiment</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="24" Label="Source1" />
                  <Edge From="23" To="24" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Operation</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TabControlBuilder">
              <gui:Name />
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="rx:Defer">
              <Name>ActivityTraces</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="imvizui:ImPlotVisualizerBuilder" />
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>frame</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>frame</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ParsedFipStreams</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:FipActivityGridVisualizer">
                      <p1:Visible>true</p1:Visible>
                      <p1:FontSize>20</p1:FontSize>
                      <p1:Capacity>10</p1:Capacity>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>FipGUI</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Consolas, 12pt</gui:Font>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>0.54</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>0.46</gui:Height>
                </gui:RowStyle>
              </gui:RowStyles>
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>