<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindPhysiologyFip.Session;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:AindPhysiologyFip.TaskLogic;assembly=Extensions"
                 xmlns:p3="clr-namespace:AindPhysiologyFip.Rig;assembly=Extensions"
                 xmlns:p4="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:p6="clr-namespace:FipExtensions;assembly=Extensions"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p7="clr-namespace:AllenNeuralDynamics.VersionControl;assembly=AllenNeuralDynamics.VersionControl"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p8="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p9="clr-namespace:AllenNeuralDynamics.Core.Design;assembly=AllenNeuralDynamics.Core.Design"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p10="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>..\local\AindPhysioFipTaskLogic.json</TaskLogicPath>
        <RigPath>..\local\AindPhysioFipRig.json</RigPath>
        <SessionPath>..\local\AindBehaviorSessionModel.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DeserializeSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorSessionModel" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p2:DeserializeFromJson">
              <p2:Type xsi:type="TypeMapping" TypeArguments="p2:AindPhysioFipTaskLogic" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p3:DeserializeFromJson">
              <p3:Type xsi:type="TypeMapping" TypeArguments="p3:AindPhysioFipRig" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>StartExperimentShortcut</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>Annotations</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="cv:Circle[]">
              <rx:Name>CurrentRedRoi</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="cv:Circle[]">
              <rx:Name>CurrentGreenIsoRoi</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:RoiSettings">
              <rx:Name>CurrentCombinedRoi</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ExperimentState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>../.local/default.json</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LocalRoiDefaultPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="16" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="16" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source3" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Cameras</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                    <rx:Name>_TriggeredCamerasInitialized</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>2</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>CamerasReady</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>_TriggeredCamerasInitialized</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>CameraGreenIso</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Gain" Selector="Gain" />
                      <Property Name="Offset" Selector="Offset.X,Offset.Y" />
                      <Property Name="SerialNumber" Selector="SerialNumber" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p6:FipSpinnakerCapture">
                      <spk:Index xsi:nil="true" />
                      <spk:ColorProcessing>Default</spk:ColorProcessing>
                      <p6:Gain>0</p6:Gain>
                      <p6:Offset>
                        <p6:X>0</p6:X>
                        <p6:Y>0</p6:Y>
                      </p6:Offset>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p6:ToFipFrame">
                      <p6:CameraSource>GreenIso</p6:CameraSource>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>_TriggeredCamerasInitialized</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>CameraRed</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Gain" Selector="Gain" />
                      <Property Name="Offset" Selector="Offset.X,Offset.Y" />
                      <Property Name="SerialNumber" Selector="SerialNumber" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p6:FipSpinnakerCapture">
                      <spk:Index xsi:nil="true" />
                      <spk:ColorProcessing>Default</spk:ColorProcessing>
                      <p6:Gain>0</p6:Gain>
                      <p6:Offset>
                        <p6:X>0</p6:X>
                        <p6:Y>0</p6:Y>
                      </p6:Offset>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p6:ToFipFrame">
                      <p6:CameraSource>Red</p6:CameraSource>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:GroupBy">
                    <rx:KeySelector>Value.Source</rx:KeySelector>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>CameraStreams</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="11" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="12" To="14" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="27" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="22" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="23" To="25" Label="Source1" />
                  <Edge From="24" To="25" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source2" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Harp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CuttlefishFip</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges />
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>OperationLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>ManageRoi</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:AindPhysioFipRig">
                      <p3:AindBehaviorServicesPkgVersion>0.10.2</p3:AindBehaviorServicesPkgVersion>
                      <p3:Version>0.1.0</p3:Version>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RoiSettings</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p6:LoadRoiDefault">
                      <p6:Path>../.local/default.json</p6:Path>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentCombinedRoi</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>QA</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>ProtocolValidation</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Repository</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p7:IsRepositoryClean">
                      <p7:IgnoreUntracked>false</p7:IgnoreUntracked>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AllowDirtyRepo</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>AllowDirty?</scr:Name>
                    <scr:Expression>Item2 ? False : Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p8:ThrowException">
                      <p8:Message>Repository is not clean! Please discard all local changes.</p8:Message>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraChecks</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CameraStreams</Name>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>CheckDroppedFrames</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value.FrameNumber</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Difference">
                                  <dsp:Order>1</dsp:Order>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Subtract">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="12" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source2" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>Camera {0} dropped frame detected during pre-session!</Format>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="Message" Selector="it" />
                          </PropertyMappings>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p8:ThrowException">
                            <p8:Message>Dropped frame detected during pre-session!</p8:Message>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StartExperiment</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CameraStreams</Name>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>OnlineQC</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value.FrameTime</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Difference">
                                  <dsp:Order>1</dsp:Order>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Multiply">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>1E-09</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Seconds</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Difference">
                                  <dsp:Order>1</dsp:Order>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Subtract" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Abs" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="JitterThreshold" />
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>0.0005</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:ObserveOn">
                                  <rx:Scheduler>TaskPoolScheduler</rx:Scheduler>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Period" DisplayName="SnoozeTime" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Timer">
                                  <rx:DueTime>PT0S</rx:DueTime>
                                  <rx:Period>PT10S</rx:Period>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Gate" />
                              </Expression>
                              <Expression xsi:type="rx:SelectMany">
                                <Name>MakeUI</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>InputSequence</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Key</Selector>
                                    </Expression>
                                    <Expression xsi:type="Format">
                                      <Format>Camera {0} out-of-alignment qc was triggered.</Format>
                                      <Selector>it</Selector>
                                    </Expression>
                                    <Expression xsi:type="InputMapping">
                                      <PropertyMappings>
                                        <Property Name="Text" Selector="it" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p9:MessageBox">
                                        <p9:Text />
                                        <p9:Title>Warning</p9:Title>
                                        <p9:MessageBoxIcon>Exclamation</p9:MessageBoxIcon>
                                      </Combinator>
                                    </Expression>
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="4" To="8" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="10" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source2" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="14" Label="Source1" />
                              <Edge From="13" To="14" Label="Source2" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="19" Label="Source1" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="19" Label="Source2" />
                              <Edge From="19" To="20" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SkipHardwareValidation</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Visualizers</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingRootPath</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>DateTime.Now</scr:Name>
              <scr:Expression>DateTime.Now.ToString("yyyy-MM-ddTHHmmss")</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>DateTimeSuffix</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingRootPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p8:AppendModalitySuffix">
                <p8:Modality>Fib</p8:Modality>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>Fib</Name>
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RigName</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DateTimeSuffix</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}/{1}_{2}</Format>
                    <Selector>Item1, Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>RootLoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>Logs</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Logs</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>DeviceName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionSchema</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:SerializeToJson" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DeviceName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogDataSchema.bonsai">
                          <SubjectName>LoggingRootPath</SubjectName>
                          <Modality xsi:nil="true" />
                          <DeviceName xsi:nil="true" />
                          <LogName>session_output</LogName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:SerializeToJson" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DeviceName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogDataSchema.bonsai">
                          <SubjectName>LoggingRootPath</SubjectName>
                          <Modality xsi:nil="true" />
                          <DeviceName xsi:nil="true" />
                          <LogName>rig_output</LogName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RawSessionSchema</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DeviceName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogAllText.bonsai">
                          <SubjectName>LoggingRootPath</SubjectName>
                          <Modality xsi:nil="true" />
                          <DeviceName xsi:nil="true" />
                          <LogName>session_input</LogName>
                          <Extension>json</Extension>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RawRigSchema</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DeviceName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogAllText.bonsai">
                          <SubjectName>LoggingRootPath</SubjectName>
                          <Modality xsi:nil="true" />
                          <DeviceName xsi:nil="true" />
                          <LogName>rig_input</LogName>
                          <Extension>json</Extension>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="7" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="12" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="13" To="16" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="17" To="20" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraStreams</Name>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>LogCameraMetadata</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>CameraStream</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>ToString</scr:Name>
                          <scr:Expression>it.ToString()</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:PascalToSnake" />
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>CameraName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CameraStream</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timestamp" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.Seconds,Value.Value.FrameNumber,Value.Value.FrameTime,Timestamp.UtcDateTime</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CameraName</Name>
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>camera_{0}_metadata.csv</Format>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LogName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogCsv.bonsai">
                          <SubjectName>LoggingRootPath</SubjectName>
                          <Modality xsi:nil="true" />
                          <LogName xsi:nil="true" />
                          <DeviceName xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="14" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source2" />
                        <Edge From="14" To="15" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentCombinedRoi</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:SerializeToJson" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RootLoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>[0}/regions.json</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="io:WriteAllText">
                      <io:Overwrite>false</io:Overwrite>
                      <io:Append>false</io:Append>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SoftwareEvents</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SoftwareEvent</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:ObserveOn">
                            <rx:Scheduler>TaskPoolScheduler</rx:Scheduler>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateTimestamped" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p8:TimestampSoftwareEvent" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai">
                          <LoggerName>SoftwareEvents</LoggerName>
                          <SubjectName>LoggingRootPath</SubjectName>
                          <Modality xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Repository</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p7:IsRepositoryClean">
                            <p7:IgnoreUntracked>false</p7:IgnoreUntracked>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p8:CreateSoftwareEvent">
                            <p8:EventName>RepositoryStatus</p8:EventName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SoftwareEvent</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentCombinedRoi</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p8:CreateSoftwareEvent">
                            <p8:EventName>CurrentRoiSettings</p8:EventName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SoftwareEvent</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source2" />
                  <Edge From="3" To="4" Label="Source3" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="18" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SessionSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p7:CreateRepository">
                <p7:Path>../.</p7:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Repository</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RootFolder" Selector="RootPath" />
                <Property Name="SessionName" Selector="SessionName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai">
              <RootFolder />
              <SessionName xsi:nil="true" />
              <SubjectName>LoggingRootPath</SubjectName>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Processing</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:Defer">
              <Name>ParseGreenIsoCamera</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraStreams</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>GreenIso</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="HasFlag">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p6:FipCameraSource">
                            <Value>GreenIso</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisStream</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisStream</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.FrameNumber</Selector>
                  </Expression>
                  <Expression xsi:type="Mod">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>RemFirstFrame</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="FirstFrameColor" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="WorkflowProperty(p6:FipCameraSource),p6:FipCameraSource">
                    <MemberName>Value</MemberName>
                    <Value>Green</Value>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>FirstColor</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SecondFrameColor" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="WorkflowProperty(p6:FipCameraSource),p6:FipCameraSource">
                    <MemberName>Value</MemberName>
                    <Value>Iso</Value>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>SecondColor</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisStream</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.FrameNumber</Selector>
                  </Expression>
                  <Expression xsi:type="Mod">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:GroupBy">
                    <rx:KeySelector>Item1</rx:KeySelector>
                    <rx:ElementSelector />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>ParseChannel</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>thisStream</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>FrameColor</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>thisStream</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RemFirstFrame</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Equal" />
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>FirstColor</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>SecondColor</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="4" To="9" Label="Source1" />
                              <Edge From="5" To="7" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="14" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="12" Label="Source1" />
                              <Edge From="11" To="12" Label="Source2" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source2" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>FrameColor</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisStream</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>FrameColor</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Source" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p10:ModifyFipCameraSource">
                            <p10:Source>None</p10:Source>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="10" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentGreenIsoRoi</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Circles" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p6:CircleActivityCalculator">
                      <p6:Operation>Avg</p6:Operation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="14" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="17" To="20" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="26" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source2" />
                  <Edge From="26" To="27" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>ParseRedCamera</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraStreams</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Red</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="HasFlag">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p6:FipCameraSource">
                            <Value>Red</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisStream</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisStream</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentRedRoi</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Circles" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p6:CircleActivityCalculator">
                      <p6:Operation>Avg</p6:Operation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Value.FipFrame.Source</rx:KeySelector>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>ParsedFipStreams</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>